

load_file("nrngui.hoc")
load_file("rn.hoc")

load_file("DGC_protocol.ses")

// Load the granule cell template and test routines
xopen("DGC_tests_na8st.hoc")

strdef local_forest_path, local_results_path

gid = 827
local_forest_path = "/home/igr/src/model/DGC_forest/dat/110/007"
local_results_path = "results"

gid = 001
local_forest_path = "/home/igr/src/model/DGC_forest/dat/110/001"
local_results_path = "results"

passive_test (local_forest_path, local_results_path, gid, 0)
single_ap_test (local_forest_path, local_results_path, gid, 0)
ap_rate_test (local_forest_path, local_results_path, gid, 0)

//objref gc
//gc = new DGC(1, gid, dims_fn, points_fn, dendrite_topology_fn, dendrite_soma_topology_fn, spine_density_fn)
