///////////////////// Parameters /////////////////////

proc parameters() {
    
    celsius = 32
    v_init = -68
    
    //Passive properties
    Ra0 = 194       //Ohm.cm
    cm0 = 1.0         //uF/cm2
    gpas = 4.5e-05    //S/cm2
    Rm0 = 1e-3/gpas //kOhm.cm2
    Epas = -68      //mV
    EK = -90        //mV
    //EK = -77        //mV: Value used for epileptic slice unmasking

    // Parameters from Schmidt-Hieber 2010
    Ra_soma = Ra0
    Ra_axon = 120
    
    Ra_dend = Ra0
    
    // na8st conductance
    gnabar_prox_axon = 94.0
    gnabar_distal_axon = 38.6152
    gna_soma = 24 // original 18.8
    gENa = 55.0

    lambda2 = 10.0
    dend_50 = 80.0
    dend_slope = 40.0
    amp_gauss= 18.015027
    
    center = 2.0
    slope = 2.0
    
    //The M conductance
    gMaxon = 20       //pS/um2; for other units see the .mod
    kKM = 9           //files and the panel in "SetUp.hoc".
    v0erevKM = 65
    kVM = 40
    gammaKM = 0.5
    taudivKM = 1
    Dtaumult1 = 30
    Dtaumult2 = 30
    tau0mult = 1
    VshiftKM = 0
    
    //The SK and BK conductances
    gsksoma = 0.002 // original 0.0001
    gskprox = 0.00015 // increase by a factor of 4 to achieve
    gskGCLs = 0.00015 // adaptation closer to Santhakumar 2005
    erevSK = EK
    tauskdiv = 2
    erevBK = EK
    BKmult = 20.0 // original 0.3
    
    //The sAHP conductance
    gbarsAHP = 20 // original 20
    tau1RefsAHP = 400
    tau2sAHP = 200
    c1infsAHP = 0.25
    oinfsAHP = 0.5
    CaRefsAHP = 0.002
    cahsAHP = 0.01
    kcasAHP = 0.001
    nsAHP = 4
    msAHP = 1
    
    //The ad-hoc unknown conductance
    gbarUK = 20 // original 200
    erevUK = -55
    pUK = 4
    tauUK = 10
    VhalfUK =  -50
    kUK = 1
    kcaUK = 0.01
    
    //The delayed rectifier and A conductances
    KDRmult = 1.35 // increased from 0.8
    V0KDR = 23
    taumultKDR = 1.5
    gKAs = 0.01
    gKAa = 0.02
    
    //Calcium channels
    CaTmult = 2.75
    CaNmult = 4 // original 1
    CaLmult = 4 // original 1
    ca0 = .00007
    tauctdiv = 1.5
    taucadiv = 1.5
    Vshift = 0
    
    // Synaptic reversal potentials
    E_GABAA = -75 // Mean value reported in controls by Pathak et al., J Neurosci. 2007
    E_GABAB = -90
    E_AMPA  = 0
    
    // Spine scaling factor
    // arrived at via optimization. spine neck appears to shield dendrite from spine head
    cm_fraction = 0.4
    // contribution to membrane capacitance and time constant
    SA_spine = PI * (1.58 * 0.077 + 0.5 * 0.5)

}


