
begintemplate DGC

// GCL - granular layer dendrite
// PD - proximal dendrite
// MD - middle dendrite
// DD - distal dendrite

//
// Synaptic connections are organized by type of pre-synaptic cell:
//
// syns_GC - connections from other granule cells
// syns_MC - connections from mossy cells
// syns_HC - connections from HIPP cells
// syns_BC - connections from PV+ basket cells
// syns_AA - connections from axo-axonic cells
// syns_HCC - connections from HICAP cells
// syns_NGFC - connections from neurogliaform cells
//

public soma, axon, dendrites
public all, allaxons, alldendrites, alldendritesList
public nDends, nGCLD, nPD, nMD, nDD
public GCLDidxs, PDidxs, MDidxs, DDidxs
public allsyns, syns_E, syns_I, syns, syns_GC, syns_MC, syns_HC, syns_BC, syns_AA, syns_HCC, syns_NGFC_GABAA, syns_NGFC_GABAB, syns_LPP, syns_MPP
public ndendpts
public verbose, filemode
public addSyn, syntest, syntest_up, synpulsetest
public syn_stim
public is_art, connect2target

verbose = 1
filemode = 1
id  = -1
gid = -1
random_stream_offset = 0

create soma[1], axon[4], dendrites[1]

objref GCLDs, PDs, MDs, DDs, all, allaxons, alldendrites, alldendritesList
objref rates_soma, rates_axon, rates_seg
objref gna_y_axon, gna_y_dend, dist_x_dend, dist_x_axon
objref GCLDidxs, PDidxs, MDidxs, DDidxs, ndendpts
objref GCLDweights, PDweights, MDweights, DDweights, GCLPDweights, MDDweights, GCLPDidxs, MDDidxs
objref allsyns, syns_E, syns_I, syns, syns_GC, syns_MC, syns_HC, syns_BC, syns_AA, syns_HCC, syns_NGFC_GABAA, syns_NGFC_GABAB, syns_LPP, syns_MPP
objref syn_stim
objref nodesecmap

strdef forest_path
strdef dendrite_topology_fn, dendrite_points_fn, spine_density_fn
strdef dendrite_topology_index_fn, dendrite_points_index_fn, spine_density_index_fn


xopen("DGC_Parameters_passive_na8st.hoc")
xopen("DGC_Morphology_from_file_na8st.hoc")
xopen("DGC_Biophysics_passive_na8st.hoc")
xopen("DGC_Synapses.hoc")


proc assert() { local test strdef errmsg
    
    test = $1
    errmsg = $s2
    
    if (!test) {
        execerror ("Assertion failed: ", errmsg)
    }
}

proc read_Na_rates() { localobj fileS, fileA
    
    rates_soma = new Vector()
    rates_axon = new Vector()
    
    fileS = new File()
    fileA = new File()
    
    fileS.ropen("./dat/soma_st8.dat")
    fileA.ropen("./dat/axon_st8.dat")
    
    while (fileS.eof==0){
	rates_soma.append( fileS.scanvar() )
	rates_axon.append( fileA.scanvar() )
    }
    
    fileS.close()
    fileA.close()
}


proc init() {
    
    id  = $1
    gid = $2
    random_stream_offset = $3
    forest_path = $s4
    
    if (numarg() > 4) {
        filemode = $5
    } else {
        filemode = 1
    }
    
    if (filemode) {
        
        if (numarg() > 5) { 
            verbose = $6
        }
        
        if (filemode == 2) {
            
            sprint(dendrite_topology_fn, "%s/topology.bin", forest_path)
            sprint(dendrite_points_fn, "%s/points.bin", forest_path)
            sprint(spine_density_fn, "%s/spines.bin", forest_path)
            
            sprint(dendrite_topology_index_fn, "%s/topology.index.bin", forest_path)
            sprint(dendrite_points_index_fn, "%s/points.index.bin", forest_path)
            sprint(spine_density_index_fn, "%s/spines.index.bin", forest_path)
            
        } else {
            
            sprint(dendrite_topology_fn, "%s/DGC_dendrite_topology_%06d.dat", forest_path, id)
            sprint(dendrite_points_fn, "%s/DGC_dendrite_points_%06d.dat", forest_path, id)
            sprint(spine_density_fn, "%s/DGC_spine_density_%06d.dat", forest_path, id)
        }
        
    } 
    
    if (verbose) {
        printf ("dendrite topology filename = %s\n", dendrite_topology_fn)
        printf ("dendrite points filename = %s\n", dendrite_points_fn)
        printf ("spine density filename = %s\n", spine_density_fn)
    }
    
    parameters()
    read_Na_rates()
    if (filemode > 0) {
        celldef()
    } else {
        if (numarg() > 13) {
            verbose = $14
            celldef($o6,$o7,$o8,$o9,$o10,$o11,$o12,$o13)
        } else if (numarg() > 11) {
            verbose = $12
            celldef($o6,$o7,$o8,$o9,$o10,$o11)
        }
    }
    
}


proc celldef() {
    
    GCLDidxs = new Vector()
    PDidxs  = new Vector()
    MDidxs  = new Vector()
    DDidxs  = new Vector()

    syns_GC   = new List()
    syns_MC   = new List()
    syns_HC   = new List()
    syns_BC   = new List()
    syns_AA   = new List()
    syns_HCC  = new List()
    syns_NGFC_GABAA = new List()
    syns_NGFC_GABAB = new List()
    syns_LPP  = new List()
    syns_MPP  = new List()
    syns = new List() 
    syns_E = new List() 
    syns_I = new List() 
    allsyns = new List() 
    allsyns.append(syns_E)
    allsyns.append(syns_I)
    
    syns.append(syns_GC)
    syns.append(syns_MC)
    syns.append(syns_HC)
    syns.append(syns_BC)
    syns.append(syns_AA)
    syns.append(syns_HCC)
    syns.append(syns_NGFC_GABAA)
    syns.append(syns_NGFC_GABAB)
    syns.append(syns_LPP)
    syns.append(syns_MPP)
    
    if (numarg() > 1) {
        topol($o1,$o2,$o3,$o4)
    } else {
        topol()
    }
    
    if (numarg() > 6) {
        shape($o4,$o5,$o6,$o7,$o8)
    } else if (numarg() > 1) {
        shape($o5)
    } else {
        shape()
    }
    subsets()
    geom()
    if (numarg() > 6) {
        geom_spines_from_python()
    } else if (numarg() > 1) {
        geom_spines($o6)
    } else {
        geom_spines()
    }
    print "after spines"
    biophys()
    print "after biophys"
    synapses()
    print "after synapses"
    finitialize(v_init)
    print "after finitialize"
}

func is_art()  { return 0 }

obfunc connect2target() { localobj nc // $o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}


endtemplate DGC
