
xopen("DGC_Tests_from_file_na8st.hoc")
xopen("DGC_Synapse_Tests_from_file_na8st.hoc")

load_file("DGC_protocol.ses")

strdef local_forest_path, local_results_path

gid = 505
local_forest_path = "/home/igr/src/model/dgc_forest/dat/650"
local_results_path = "results"

/*
passive_test(local_forest_path, local_results_path, gid)
threshold_test(local_forest_path, local_results_path, gid)
single_ap_test(local_forest_path, local_results_path, gid)
synapse_test(local_forest_path, local_results_path, gid)
pp_synapse_test(local_forest_path, local_results_path, gid)
*/
//ap_rate_test(local_forest_path, local_results_path, gid, 0.3) // 68
ap_rate_test(local_forest_path, local_results_path, gid, 0.5) // 129


